---
API: 3
OpenSesame: 4.0.29
Platform: posix
---
set width 1024
set title "Emotional capture vs disengagement"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set jatos_uuid "bc5ebd25-44b7-b27e-eae5-2a073ca3240c"
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/lotje/Documents/Research, teaching and programming/OpenSesame/Scripts/Work Lindenloot/Manon Mulckhuyse"
set disable_garbage_collection False
set description "Cf. Born et al. (2011)"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#3d3846"

define form_consent Consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	You are about to participate in an experiment.
	
	This experiment poses no known risks to your health and your name will not be associated with the findings.
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions not addressed by this consent form, please do not hesitate to ask.
	
	You can stop at any time during experiment if you feel uncomfortable.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="{form_title}"
	widget 0 1 2 1 label center=no text="{form_text}"
	widget 0 2 2 1 checkbox text="{checkbox_text}" var=checkbox_status
	widget 0 3 1 1 button text="{accept_text}" var=accept_status
	widget 1 3 1 1 button text="{decline_text}"


define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Instructions go here"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define notepad QUESTIONS
	__note__
	- Pause after 24 (instead of 48) trials because otherwise there is only one break (and only one opportunity to give feedback on latency). If you want to change this, just let me know.
	- I used a dummy beep sound for the warning message (latency > 600 ms). Could you send me the sound file that you had in mind?
	- The trial condition should now be logged to the EDF file in the following format: "trigger_condition = " followed by the condition id. Could you check this?
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define notepad TODO
	set note ""
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script block_lists
	set description "Executes Python code"
	set _run ""
	___prepare__
	L_POS1 = ["F01_", "F02_", "F03_", "F04_",
	  "F05_", "F06_", "F07_", "F08_",
	  "M01_", "M02_", "M03_", "M04_",
	  "M05_", "M06_", "M07_", "M08_"] * 2
	
	L_POS2 = ["F01_", "F02_", "F03_", "F04_",
	  "F05_", "F06_", "F07_", "F08_",
	  "M01_", "M02_", "M03_", "M04_",
	  "M05_", "M06_", "M07_", "M08_"] * 2
	
	L_POS3 = ["F01_", "F02_", "F03_", "F04_",
	  "F05_", "F06_", "F07_", "F08_",
	  "M01_", "M02_", "M03_", "M04_",
	  "M05_", "M06_", "M07_", "M08_"] * 2
	
	L_POS4 = ["F01_", "F02_", "F03_", "F04_",
	  "F05_", "F06_", "F07_", "F08_",
	  "M01_", "M02_", "M03_", "M04_",
	  "M05_", "M06_", "M07_", "M08_"] * 2
	
	L_POS5 = ["F01_", "F02_", "F03_", "F04_",
	  "F05_", "F06_", "F07_", "F08_",
	  "M01_", "M02_", "M03_", "M04_",
	  "M05_", "M06_", "M07_", "M08_"] * 2
	
	L_POS6 = ["F01_", "F02_", "F03_", "F04_",
	  "F05_", "F06_", "F07_", "F08_",
	  "M01_", "M02_", "M03_", "M04_",
	  "M05_", "M06_", "M07_", "M08_"] * 2
	
	# Create a dictionary to map the lists
	lists = {
	    1: L_POS1,
	    2: L_POS2,
	    3: L_POS3,
	    4: L_POS4,
	    5: L_POS5,
	    6: L_POS6
	}
	__end__

define loop block_loop
	set source table
	set skip 0
	set repeat 2
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 24
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if False
	setcycle 0 change_condition change
	setcycle 0 emotional_condition fear
	setcycle 0 target_position 1
	setcycle 1 change_condition no_change
	setcycle 1 emotional_condition fear
	setcycle 1 target_position 1
	setcycle 2 change_condition change
	setcycle 2 emotional_condition neutral
	setcycle 2 target_position 1
	setcycle 3 change_condition no_change
	setcycle 3 emotional_condition neutral
	setcycle 3 target_position 1
	setcycle 4 change_condition change
	setcycle 4 emotional_condition fear
	setcycle 4 target_position 2
	setcycle 5 change_condition no_change
	setcycle 5 emotional_condition fear
	setcycle 5 target_position 2
	setcycle 6 change_condition change
	setcycle 6 emotional_condition neutral
	setcycle 6 target_position 2
	setcycle 7 change_condition no_change
	setcycle 7 emotional_condition neutral
	setcycle 7 target_position 2
	setcycle 8 change_condition change
	setcycle 8 emotional_condition fear
	setcycle 8 target_position 3
	setcycle 9 change_condition no_change
	setcycle 9 emotional_condition fear
	setcycle 9 target_position 3
	setcycle 10 change_condition change
	setcycle 10 emotional_condition neutral
	setcycle 10 target_position 3
	setcycle 11 change_condition no_change
	setcycle 11 emotional_condition neutral
	setcycle 11 target_position 3
	setcycle 12 change_condition change
	setcycle 12 emotional_condition fear
	setcycle 12 target_position 4
	setcycle 13 change_condition no_change
	setcycle 13 emotional_condition fear
	setcycle 13 target_position 4
	setcycle 14 change_condition change
	setcycle 14 emotional_condition neutral
	setcycle 14 target_position 4
	setcycle 15 change_condition no_change
	setcycle 15 emotional_condition neutral
	setcycle 15 target_position 4
	setcycle 16 change_condition change
	setcycle 16 emotional_condition fear
	setcycle 16 target_position 5
	setcycle 17 change_condition no_change
	setcycle 17 emotional_condition fear
	setcycle 17 target_position 5
	setcycle 18 change_condition change
	setcycle 18 emotional_condition neutral
	setcycle 18 target_position 5
	setcycle 19 change_condition no_change
	setcycle 19 emotional_condition neutral
	setcycle 19 target_position 5
	setcycle 20 change_condition change
	setcycle 20 emotional_condition fear
	setcycle 20 target_position 6
	setcycle 21 change_condition no_change
	setcycle 21 emotional_condition fear
	setcycle 21 target_position 6
	setcycle 22 change_condition change
	setcycle 22 emotional_condition neutral
	setcycle 22 target_position 6
	setcycle 23 change_condition no_change
	setcycle 23 emotional_condition neutral
	setcycle 23 target_position 6
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run block_lists True
	run init_lat_list True
	run block_loop True
	run break_loop True

define loop break_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run break_sequence

define sequence break_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run get_avg_saccade_latency True
	run new_form_text_display True
	run new_feedback True

define inline_script constants
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Screen resolution:
	MONITOR_HEIGHT = 29.6 # TODO: CHECK
	VIEWING_DISTANCE = 75
	VERTICAL_RES = 1050
	
	# Sizes and eccentricities (see Born & Theeuwes, 2011):
	# Diameter maginary circle: 9.5 dg
	DIAMETER_ECC_DG = 9.5
	R_ECC_DG = DIAMETER_ECC_DG/2
	
	R_IMAGINARY_CIRCLE = dgToPx(R_ECC_DG, MONITOR_HEIGHT, VIEWING_DISTANCE, VERTICAL_RES)
	
	# MINOR diameter of the stimuli: 1.5 dg
	STIM_SIZE_DG = 3
	STIM_SIZE_PX = dgToPx((STIM_SIZE_DG/2.), MONITOR_HEIGHT, VIEWING_DISTANCE, VERTICAL_RES)
	
	# Bounding boxes around face images are 290*380 px
	MAJOR_AXIS = 380
	MINOR_AXIS = 290
	
	SCALE_FACE = STIM_SIZE_PX/MINOR_AXIS
	
	W_ELLIPSE = MINOR_AXIS*SCALE_FACE
	H_ELLIPSE = MAJOR_AXIS*SCALE_FACE
	
	# Twelve positions on an imaginary circle:
	L_POS =  getPos(12, R_IMAGINARY_CIRCLE)
	
	# The even positions will serve as 
	# the stimulus positions
	L_STIM_POS = L_POS[::2]
	
	# The odd positions will serve as potential 
	# distractor positions:
	L_DIST_POS = L_POS[1::2]
	
	# TIMINGS:
	FIX_DUR = 500.
	
	# COLORS:
	DIST_COL = "#ed3624"
	TARGET_COL = "#07ad4b"
	
	# Threshold:
	THRESHOLD = 100
	HITS_REQUIRED = 5
	
	# After how many ms do you want to play the warning beep?
	THRESHOLD_TIMING = 600
	__end__

define inline_script debug
	set description "Executes Python code"
	set _run ""
	set _prepare "debug = True"

define inline_script display_change
	set description "Executes Python code"
	___run__
	my_canvas['dist_image'].fname = change_path
	#my_canvas.fixdot()
	my_canvas.show()
	eyetracker.log('start_phase change')
	__end__
	set _prepare ""

define inline_script display_fixdot
	set description "Executes Python code"
	___run__
	my_canvas['my_fixdot'] = FixDot()
	my_canvas.show()
	eyetracker.log('start_phase fixdot')
	clock.sleep(random.randint(500, 700))
	__end__
	___prepare__
	my_canvas = Canvas()
	__end__

define inline_script display_placeholders
	set description "Executes Python code"
	___run__
	my_canvas.show()
	eyetracker.log('start_phase placeholders')
	clock.sleep(1500)
	__end__
	___prepare__
	stim_counter = 0
	# Loop through 6 positions:
	for pos in L_STIM_POS:
	  stim_counter += 1
	  # Draw red circle to canvas
	
	  _x, _y = pos
	  # my_canvas['stim_%s' % stim_counter] = Circle(_x, _y, R_CIRCLE, fill=True, color=DIST_COL)
	
	  my_canvas['stim_%s' % stim_counter] = Ellipse((_x-W_ELLIPSE/2), (_y-H_ELLIPSE/2), W_ELLIPSE, H_ELLIPSE, fill=True, color=DIST_COL)
	  
	__end__

define inline_script display_target
	set description "Executes Python code"
	___run__
	# Element interface
	my_canvas['stim_%s' % target_position].color = TARGET_COL
	my_canvas['dist_image'] = Image(face_path, x=x_dist, y=y_dist, scale=SCALE_FACE)
	
	my_canvas.show()
	eyetracker.log('start_phase target and distractor')
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run QUESTIONS True
	run TODO True
	run import True
	run functions True
	run constants True
	run debug True
	run new_pygaze_init True
	run Consent True
	run Instructions True
	run experimental_loop True

define loop experimental_loop
	set source table
	set skip 0
	set repeat 10
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice no
	run block_sequence

define inline_script functions
	set description "Executes Python code"
	set _run ""
	___prepare__
	def getPos(num_positions, radius):
	    
	    """
	    Returns a list of a given number of coordinates on an       
	    imaginary circle with a given radius
	    """
	    positions = []
	    
	    for i in range(num_positions):
	        angle = i * (2 * math.pi) / num_positions
	        x = radius * math.cos(angle)
	        y = radius * math.sin(angle)
	        positions.append((x, y))
	    return positions
	
	def getChange(current_condition):
	    
	    """
	    Returns the changed condition, i.e.
	    fear -> neutral and vice versa
	    """
	    
	    if current_condition == "neutral":
	        change_condition = "fear"
	
	    elif current_condition == "fear":
	        change_condition = "neutral"
	        
	    else:
	        raise Exception("Unknown current condition")
	        
	    return change_condition
	
	def getDistance(x1, y1, x2, y2):
	    
	    """
	    Euclidean distance formula to calculate the distance
	    between two points in a two-dimensional plane"
	    """
	    
	    distance = math.sqrt((x2 - x1)**2 + (y2 - y1)**2)
	    return distance
	    
	    
	
	def dgToPx(size_in_deg, h, d, r):
	    
	    """
	    size_in_deg
	    h         --- Monitor height in cm
	    d         --- Distance between monitor and participant in cm
	    r         --- Vertical resolution of the monitor
	    
	    """
	
	
	    deg_per_px = math.degrees(math.atan2(.5 * h, d)) / (.5 * r)
	    print(deg_per_px)
	    size_in_px = size_in_deg / deg_per_px
	    
	    return size_in_px
	
	def filterAdjacent(targetIndex, L_DIST_POS):
	    
	    """
	    Remove the two points on the circle that are adjacent
	    to the current target. Only 4 potential distractor
	    positions will be left
	    """
	    
	    # Make a copy of the list containing possible
	    # distractor positions:
	    l_dist_pos = L_DIST_POS[:]
	    
	    # Determine which two indices should be removed:
	    removeIndex1 = targetIndex-1
	    removeIndex2 = (targetIndex) % (5 + 1)
	    
	    print("REMOVE INDEX1 = ", removeIndex1)
	    print("REMOVE INDEX2 = ", removeIndex2)
	    
	    # First remove the highest index:
	    for index in sorted([removeIndex1, removeIndex2])[::-1]:
	        del l_dist_pos[index]
	    
	    return l_dist_pos
	
	def shuffle_and_pop_with_criteria(lst, criterion):
	    # Shuffle the list
	    random.shuffle(lst)
	    
	    # Loop until we find an item that meets the criterion
	    while lst:
	        # Pop an item from the end of the list
	        item = lst.pop()
	        
	        # Check if the item meets the criterion
	        if item != criterion:
	            # If it does, return it
	            return item
	        else:
	
	
	            # If it doesn't, put it back to the list (at the beginning)
	            lst.insert(0, item)
	    
	    # If no items left that meet the criterion, return None or raise an error
	    return None
	__end__

define inline_script get_avg_saccade_latency
	set description "Executes Python code"
	set _run ""
	___prepare__
	print(l_latencies)
	print(len(l_latencies))
	avg_lat = int(sum(l_latencies) / len(l_latencies) )
	__end__

define inline_script import
	set description "Executes Python code"
	set _run ""
	___prepare__
	import math
	import random
	import sys
	__end__

define inline_script init_lat_list
	set description "Executes Python code"
	set _run ""
	set _prepare "l_latencies = []"

define inline_script log_trial_condition
	set description "Executes Python code"
	set _run ""
	___prepare__
	condition_id = "_".join([change_condition,emotional_condition])
	eyetracker.log('trigger_condition = %s' % condition_id)
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log yes
	exclude "*_backend"
	exclude PERSISTENT
	exclude TEMPORARY
	exclude acc
	exclude accuracy
	exclude average_response_time
	exclude avg_rt
	exclude background
	exclude closed
	exclude "count_*"
	exclude credentialless
	exclude crossOriginIsolated
	exclude datetime
	exclude description
	exclude devicePixelRatio
	exclude disable_garbage_collection
	exclude experiment_file
	exclude experiment_path
	exclude "font_*"
	exclude foreground
	exclude form_clicks
	exclude fullscreen
	exclude height
	exclude innerHeight
	exclude innerWidth
	exclude isSecureContext
	exclude length
	exclude logfile
	exclude opensesame_codename
	exclude origin
	exclude originAgentCluster
	exclude outerHeight
	exclude outerWidth
	exclude "page?Offset"
	exclude round_decimals
	exclude "screen*"
	exclude "scroll?"
	exclude "sound_*"
	exclude start
	exclude status
	exclude "time_*"
	exclude total_correct
	exclude total_response_time
	exclude total_responses
	exclude width

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text=break x=0 y=0 z_index=0

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	__form_text__
	Time for a break!
	
	Your average reaction time was {avg_lat} ms
	
	Click Ok if you want to continue
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define pygaze_drift_correct new_pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Performs eye-tracker drift correction"

define pygaze_init new_pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker out of recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define pygaze_log pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define inline_script remove_fixdot
	set description "Executes Python code"
	___run__
	# GAP:
	del my_canvas['my_fixdot']
	my_canvas.show()
	eyetracker.log('start_phase gap')
	clock.sleep(random.randint(150, 250))
	__end__
	set _prepare ""

define inline_script sleep
	set description "Executes Python code"
	___run__
	# As in Born & Theeuwes: 1000 ms
	clock.sleep(1000)
	__end__
	set _prepare ""

define inline_script trial_properties
	set description "Executes Python code"
	set _run ""
	___prepare__
	random.shuffle(L_POS1)
	random.shuffle(L_POS2)
	random.shuffle(L_POS3)
	random.shuffle(L_POS4)
	random.shuffle(L_POS5)
	random.shuffle(L_POS6)
	
	# Determine which face to use (without replacement, counter balanced across positions):
	
	print(count_trial_sequence)
	
	# Pop from the list corresponding to list_counter
	if target_position in lists:
	  
	  if count_trial_sequence == 0:
	    face = lists[target_position].pop()
	    print(f"Popped item: {face}")
	  
	  else:
	      print(face)
	      face = shuffle_and_pop_with_criteria(lists[target_position], face)  
	else:
	    print("Invalid list counter")
	
	# Print the updated lists to verify
	for key, value in lists.items():
	    print(f"L_POS{key}: {value}")
	
	
	# DETERMINE INITIAL FACE:
	if emotional_condition == "fear":
	    face_stim = face + "FE.png"
	elif emotional_condition == "neutral":
	    face_stim = face + "NE.png"
	else:
	  raise Exception("Unknown emotional condition. Could not determine face_path")
	
	face_path = pool[face_stim]
	
	# DETERMINE THE CHANGED FACE (ON CHANGE-TRIALS)
	# On CHANGE trials, the emtional expression changes
	print("change_condition = " + change_condition)
	if change_condition == "change":
	  if getChange(emotional_condition) == "neutral":
	    change_face= face + "NE" + ".png"
	  elif getChange(emotional_condition) == "fear":
	    change_face= face + "FE" + ".png"
	  else:
	    raise Exception("Unknown emotional_condition")
	  
	# On NO-CHANGE trials, the emotional expression 
	# stays the same
	elif change_condition == "no_change":
	  change_face = face_stim
	  
	else:
	  raise Exception("Unknown change condition")
	  
	change_path = pool[change_face]
	
	# DETERMINE DISTRACTOR POS: 
	# TODO: remove adjancent positions:
	l_dist_pos = filterAdjacent(target_position-1, L_DIST_POS)
	
	dist_pos = random.choice(l_dist_pos)
	
	x_dist, y_dist = dist_pos
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run trial_properties True
	run new_pygaze_drift_correct True
	run new_pygaze_start_recording True
	run log_trial_condition True
	run display_fixdot True
	run display_placeholders True
	run remove_fixdot True
	run display_target True
	run wait_for_saccade True
	run display_change True
	run sleep True
	run logger True
	run pygaze_log True
	run new_pygaze_stop_recording True

define inline_script wait_for_saccade
	set description "Executes Python code"
	___run__
	# Start timing initial-fixation duration:
	t0 = clock.time()
	
	# Boolean indicating that warning beep already has been
	# played:
	warning_was_played = 0
	
	# Counter variable:
	hits = 0
	
	# First sample:
	sx, sy = eyetracker.sample()
	
	while hits < HITS_REQUIRED:
	  _x, _y = eyetracker.sample()
	  if _x == 0 or _y == 0:
	    continue  # missing data
	  distance = getDistance(sx, sy, _x, _y)
	  if distance > THRESHOLD:
	    hits += 1
	  else:
	    hits = 0
	  t1 = clock.time()
	  initial_fix_dur = t1 - t0
	  
	  if initial_fix_dur > THRESHOLD_TIMING and not warning_was_played:
	      my_sampler.play()
	      warning_was_played = 1
	
	
	l_latencies.append(initial_fix_dur)
	__end__
	___prepare__
	src = pool['slow_response_beep.wav']
	my_sampler = Sampler(src, volume=.5)
	__end__

